PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': 'encoding'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = encoding_phase
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent switchCode
      Code Type = Py
      Begin Routine:
        # Calculate current block using modulo arithmetic on the loop index (thisN)
        # thisN starts at 0.
        # 0-17 = Block 0 (Visual), 18-35 = Block 1 (Auditory), etc.
        current_block = trials.thisN // 18

        if current_block % 2 == 0:
            # VISUAL BLOCK LOGIC
            is_visual = 1
            is_auditory = 0
            # Provide a dummy valid sound ('A' note) to prevent PsychoPy from crashing
            # since visual words don't have .wav files in your folder.
            current_sound = 'A'
            current_vol = 0.0
        else:
            # AUDITORY BLOCK LOGIC
            is_visual = 0
            is_auditory = 1
            # Build the path to the audio file dynamically
            current_sound = 'audio/' + word + '.wav'
            current_vol = 1.0
    TextComponent visual_stimulus
      letterHeight = 0.04
      opacity [set every repeat] = is_visual
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $definition + '\n\n' + word
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    ImageComponent auditory_icon
      image = speaker.png
      opacity [set every repeat] = is_auditory
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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    SoundComponent audio_stim
      forceEndRoutine = False
      sound [set every repeat] = $current_sound
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      volume [set every repeat] = current_vol
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    KeyboardComponent rating_response
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = True
      startVal [time (s)] = 5.5
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    TextComponent rating_prompt
      letterHeight = 0.04
      startVal [time (s)] = 5.5
      text = Rate cleverness: 1 (Not at all)  to  5 (Extremely)
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  Routine Instruction
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    TextComponent instr_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this phase, you will see or hear clever definitions for words.

        Sometimes the word and definition will appear on the screen. Other times, you will see a speaker icon and hear the definition spoken aloud.

        Your task is to rate how 'clever' you find each definition on a scale of 1 to 5 using the number keys (1 = Not clever at all, 5 = Extremely clever).

        The trial will automatically advance after 5 seconds, even if you have already pressed a key.

        Press the SPACEBAR when you are ready to begin.
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
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    TextComponent end_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have completed this phase of the experiment.

        Thank you for your participation!

        Press the SPACEBAR to exit.
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break
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    CodeComponent break_code
      Code Type = Py
      Begin Routine:
        # Check if we are at the end of a block (trial 17, 35, 53)
        # We also make sure we don't show a break after the very last trial (71)
        if (trials.thisN + 1) % 18 != 0 or trials.thisN == 71:
            continueRoutine = False
    TextComponent break_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have completed a block.

        Please take a short break to rest your eyes.

        Press the SPACEBAR when you are ready to continue to the next block.
    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_trial
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    CodeComponent prac_code
      Code Type = Py
      Begin Routine:
        if modality == 'visual':
            is_visual = 1
            is_auditory = 0
            # Provide a dummy valid sound ('A' note) to prevent PsychoPy from crashing
            # since visual words don't have .wav files in your folder.
            current_sound = 'A'
            current_vol = 0.0
        else:
            is_visual = 0
            is_auditory = 1
            current_sound = 'audio/' + word + '.wav'
            current_vol = 1.0
    TextComponent prac_visual
      letterHeight = 0.04
      opacity [set every repeat] = is_visual
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $definition + '\n\n' + word
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    ImageComponent prac_icon
      image = speaker.png
      opacity [set every repeat] = is_auditory
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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    SoundComponent prac_audio
      forceEndRoutine = False
      sound [set every repeat] = $current_sound
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      volume [set every repeat] = current_vol
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    KeyboardComponent prac_resp
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = True
      startVal [time (s)] = 5.5
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    TextComponent prac_rating_prompt
      letterHeight = 0.04
      startVal [time (s)] = 5.5
      text = Rate cleverness: 1 (Not at all)  to  5 (Extremely)
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  Routine main_task_start
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    TextComponent orientation
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Orientation complete!

        The main task will now begin. Remember to rate the cleverness of each definition from 1 to 5.

        Press SPACE to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_instruction
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    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Before the main experiment begins, we will go through 6 practice examples so you can get used to the timing and the rating scale.

        Press the SPACEBAR to begin the practice.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  Routine prac_instruction
  LoopInitiator practice_rials loopType="TrialHandler"
    conditionsFile = practice_encoding.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('definition', 'A gray giant with a hose'), ('word', 'ELEPHANT'), ('modality', 'auditory')]),
      OrderedDict([('definition', 'A wooden box with strings'), ('word', 'GUITAR'), ('modality', 'auditory')]),
      OrderedDict([('definition', 'A loud sky drum'), ('word', 'THUNDER'), ('modality', 'auditory')]),
      OrderedDict([('definition', 'A sweet red fruit with seeds'), ('word', 'APPLE'), ('modality', 'visual')]),
      OrderedDict([('definition', 'A flying vehicle with wings'), ('word', 'AIRPLANE'), ('modality', 'visual')]),
      OrderedDict([('definition', 'A yellow curved fruit'), ('word', 'BANANA'), ('modality', 'visual')])]
    Routine practice_trial
  LoopTerminator practice_rials
  Routine main_task_start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = encoding.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('definition', 'A portable shadow box'), ('word', 'SUITCASE'), ('block', np.int64(1)), ('modality', 'visual')]),
      OrderedDict([('definition', 'A silent drummer'), ('word', 'HEART'), ('block', np.int64(1)), ('modality', 'visual')]),
      OrderedDict([('definition', 'A spoon with ambition'), ('word', 'SHOVEL'), ('block', np.int64(1)), ('modality', 'visual')]),
      OrderedDict([('definition', 'A metal tongue for guitars'), ('word', 'PICK'), ('block', np.int64(1)), ('modality', 'visual')]),
      OrderedDict([('definition', 'A glass slipper for drinks'), ('word', 'CUP'), ('block', np.int64(1)), ('modality', 'visual')]),
      OrderedDict([('definition', 'A glass drum'), ('word', 'BOWL'), ('block', np.int64(1)), ('modality', 'visual')]),
      OrderedDict([('definition', 'A house for wheels'), ('word', 'PARKINGLOT'), ('block', np.int64(1)), ('modality', 'visual')]),
      OrderedDict([('definition', 'A glass stomach for flowers'), ('word', 'VASE'), ('block', np.int64(1)), ('modality', 'visual')]),
      OrderedDict([('definition', 'A pocket refrigerator'), ('word', 'COOLER'), ('block', np.int64(1)), ('modality', 'visual')]),
      OrderedDict([('definition', 'A rainbow bridge for cars'), ('word', 'OVERPASS'), ('block', np.int64(1)), ('modality', 'visual')]),
      OrderedDict([('definition', 'A bread pillow'), ('word', 'LOAF'), ('block', np.int64(1)), ('modality', 'visual')]),
      OrderedDict([('definition', 'A sleepy trumpet'), ('word', 'HORN'), ('block', np.int64(1)), ('modality', 'visual')])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
    Routine trial
    Routine Break
  LoopTerminator trials
  Routine End
