PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = rem_know
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Instruction
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will see or hear definitions of words. Your task is to rate how 'clever' or 'funny' the definition is on a scale of 1 to 5. Press the corresponding number on your keyboard. Some will be read to you, and some will be on the screen. Press space to begin.
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    KeyboardComponent instrKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EncodingTrial
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    ImageComponent speakerIcon
      image = speaker-filled-audio-tool.png
      opacity [set every repeat] = $speakerOpacity
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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    TextComponent definitionDisplay
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $displayText
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    SoundComponent definitionAudio
      forceEndRoutine = False
      sound [set every repeat] = $audio_file
      startVal [time (s)] = 0.5
      volume [set every repeat] = $audioVolume
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    KeyboardComponent cleverRating
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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    CodeComponent switchCode
      Code Type = Py
      Begin Routine:
        # Updated Modality Logic (Block 0 is now Visual)
        if blocks.thisN % 2 == 0:
            # VISUAL SETTINGS (Blocks 1 and 3)
            displayText = definition + "\n\nTARGET: " + target_word
            speakerOpacity = 0
            audioVolume = 0
            breakMessage = "The next block will be VISUAL. \n\nPlease read the definitions on the screen. \n\nPress SPACE to start."
        else:
            # AUDITORY SETTINGS (Blocks 2 and 4)
            displayText = ""
            speakerOpacity = 1
            audioVolume = 1
            breakMessage = "The next block will be AUDITORY. \n\nPlease listen to the definitions. \n\nPress SPACE to start."
  Routine BlockBreak
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    TextComponent bMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $breakMessage
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    KeyboardComponent breakResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = 4
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    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $([0,18], [18,36], [36,54], [54,72])[blocks.thisN]
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'definition': 'A talkative featherbrain', 'target_word': 'PARAKEET', 'modality': 'auditory', 'trial_type': 'target', 'block': 1, 'audio_file': 'audio/parakeet.wav'},
        {'definition': 'A drill artist', 'target_word': 'DENTIST', 'modality': 'visual', 'trial_type': 'target', 'block': 1, 'audio_file': 'none'},
        {'definition': 'A firm, friendly touch', 'target_word': 'HANDSHAKE', 'modality': 'auditory', 'trial_type': 'target', 'block': 1, 'audio_file': 'audio/handshake.wav'},
        {'definition': 'You can sometimes eat it, but never sit on it', 'target_word': 'CACTUS', 'modality': 'visual', 'trial_type': 'target', 'block': 1, 'audio_file': 'none'},
        {'definition': 'Hairy on the outside, delicious on the inside', 'target_word': 'COCONUT', 'modality': 'auditory', 'trial_type': 'target', 'block': 1, 'audio_file': 'audio/coconut.wav'},
        {'definition': 'A very busy biological matchmaker', 'target_word': 'ENZYME', 'modality': 'visual', 'trial_type': 'target', 'block': 1, 'audio_file': 'none'},
        {'definition': 'A weapon that can be folded for storage', 'target_word': 'POCKETKNIFE', 'modality': 'auditory', 'trial_type': 'target', 'block': 1, 'audio_file': 'audio/pocketknife.wav'},
        {'definition': 'A servant in name only', 'target_word': 'BRIDESMAID', 'modality': 'visual', 'trial_type': 'target', 'block': 1, 'audio_file': 'none'},
        {'definition': 'A wooden suit for a lead heart', 'target_word': 'PENCIL', 'modality': 'auditory', 'trial_type': 'target', 'block': 1, 'audio_file': 'audio/pencil.wav'}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
      Routine EncodingTrial
    LoopTerminator trials
    Routine BlockBreak
  LoopTerminator blocks
