PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': 'retrieval_24h'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = retrieval_30min
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine cued_recall
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    TextComponent recall_prompt
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
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    CodeComponent clear_box
      Code Type = Py
      Begin Routine:
        # Force the textbox to be completely empty at the start of every trial
        typed_response.text = ''
        # Set the prompt text dynamically
        recall_prompt.text = definition + "\n\nType the word below and press ENTER to submit.\n\n(If you cannot remember the word, leave the box blank and press ENTER to see the answer)."
      Each Frame:
        if t < 0.5:
            typed_response.text = ''
    TextboxComponent typed_response
      bold = False
      borderColor = white
      editable = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.5
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    KeyboardComponent recall_submit
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine recognition
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    TextComponent recog_prompt
      letterHeight = 0.04
      startVal [time (s)] = 0.5
      text [set every repeat] = $definition + "\n\nDid you see or hear this definition earlier?\n\nPress 'Y' for YES\nPress 'N' for NO"
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    KeyboardComponent recog_key
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        recog_prompt.text = definition + "\n\nDid you see or hear this definition earlier?\n\nPress 'Y' for YES\nPress 'N' for NO"
  Routine source_memory
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    CodeComponent source_branching
      Code Type = Py
      Begin Routine:
        # If they pressed 'n' (No) during Recognition, skip this routine entirely
        if recog_key.keys == 'n':
            continueRoutine = False
    TextComponent source_prompt
      letterHeight = 0.04
      startVal [time (s)] = 0.5
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      text:
        Was this definition presented visually or auditorily?

        Press 'V' for VISUAL (Text on screen)
        Press 'A' for AUDITORY (Heard out loud)
    KeyboardComponent source_key
      allowedKeys = 'v','a'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine rem_know
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    CodeComponent rk_branching
      Code Type = Py
      Begin Routine:
        # If they pressed 'n' (No) during Recognition, skip this routine entirely
        if recog_key.keys == 'n':
            continueRoutine = False
    TextComponent rk_prompt
      letterHeight = 0.04
      startVal [time (s)] = 0.5
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      text:
        How do you remember this item?

        Press 1 for TYPE A (I remember specific details)
        Press 2 for TYPE B (I just know it's familiar)
        Press 3 for GUESS
    KeyboardComponent rk_response
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instructions
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    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this phase, your memory for the definitions you saw and heard earlier will be tested. Some definitions will be OLD (from earlier) and some will be NEW.
        For each definition, you will go through the following steps:
        1. Type the word that matches the definition and press ENTER.
        2. Indicate if the definition is OLD (Press Y) or NEW (Press N).
        If you say the item is OLD, you will also be asked:
        3. Was it presented Visually (Press V) or Auditorily (Press A)?
        4. Do you 'Remember' specific details (Press 1), just 'Know' it's familiar (Press 2), or is it a 'Guess' (Press 3)?

        Press the SPACEBAR when you are ready to begin
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have completed this memory test.

        Thank you for your time and focus!

        Press the SPACEBAR to exit and save your data.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2
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    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        If you recognize an item, you will be asked if it is Type A or Type B.

        TYPE A (Press 1): You can think back and re-experience specific details (visual, auditory, or mental thoughts) from when you learned it.
        TYPE B (Press 2): The item is highly familiar, but you cannot re-experience anything specific from when you learned it.

        Both types of memories are completely normal!
        Press "Space" to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_cued_recall
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    TextComponent recall_prompt_2
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $definition + "\n\nType the word below and press ENTER to submit."
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    CodeComponent clear_box_2
      Code Type = Py
      Begin Routine:
        # Force the textbox to be completely empty at the start of every trial
        typed_response_2.text = ''
        # Set the prompt text dynamically
        recall_prompt_2.text = definition + "\n\nType the word below and press ENTER to submit.\n\n(If you cannot remember the word, leave the box blank and press ENTER to see the answer)."
      Each Frame:
        if t < 0.5:
            typed_response_2.text = ''
    TextboxComponent typed_response_2
      bold = False
      borderColor = white
      editable = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.5
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    KeyboardComponent recall_submit_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine prac_recog
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    TextComponent recog_prompt_2
      letterHeight = 0.04
      startVal [time (s)] = 0.5
      text [set every repeat] = $definition + "\n\nDid you see or hear this definition earlier?\n\nPress 'Y' for YES\nPress 'N' for NO"
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    KeyboardComponent recog_key_2
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        recog_prompt_2.text = definition + "\n\nDid you see or hear this definition earlier?\n\nPress 'Y' for YES\nPress 'N' for NO"
  Routine prac_source
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    CodeComponent source_branching_2
      Code Type = Py
      Begin Routine:
        # If they pressed 'n' (No) during Recognition, skip this routine entirely
        if recog_key_2.keys == 'n':
            continueRoutine = False
    TextComponent source_prompt_2
      letterHeight = 0.04
      startVal [time (s)] = 0.5
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      text:
        Was this definition presented visually or auditorily?

        Press 'V' for VISUAL (Text on screen)
        Press 'A' for AUDITORY (Heard out loud)
    KeyboardComponent source_key_2
      allowedKeys = 'v','a'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine prac_rem_know
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    CodeComponent rk_branching_2
      Code Type = Py
      Begin Routine:
        # If they pressed 'n' (No) during Recognition, skip this routine entirely
        if recog_key_2.keys == 'n':
            continueRoutine = False
    TextComponent rk_prompt_2
      letterHeight = 0.04
      startVal [time (s)] = 0.5
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      text:
        How do you remember this item?

        Press 1 for TYPE A (I remember specific details)
        Press 2 for TYPE B (I just know it's familiar)
        Press 3 for GUESS
    KeyboardComponent rk_response_2
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine main_exp_inst
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    TextComponent text_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Practice complete!
        If you have any questions about the difference between Type A and Type B, please ask the researcher now.

        Press SPACE to begin the real test
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_instructions
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    TextComponent prac_inst
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        We will now do 6 practice trials. The examiner will sit with you to help clarify the difference between Type A and Type B if needed.

        Press the SPACEBAR to begin the practice.
    KeyboardComponent prac_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine recall_feedback
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    TextComponent feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $"The correct word is:  " + word
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    CodeComponent feedback_logic
      Code Type = Py
      Begin Routine:
        # Clean up what the participant typed (remove spaces, make uppercase)
        # typed_response is the name of your Textbox component in the previous routine
        user_answer = typed_response.text.strip().upper()
        correct_answer = word.strip().upper()

        # If their typed answer perfectly matches the target word, SKIP this feedback screen
        if user_answer == correct_answer:
            continueRoutine = False
  Routine prac_recall_fb
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    TextComponent feedback_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $"The correct word is:  " + word
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    CodeComponent feedback_logic_2
      Code Type = Py
      Begin Routine:
        # Clean up what the participant typed (remove spaces, make uppercase)
        # typed_response is the name of your Textbox component in the previous routine
        user_answer = typed_response_2.text.strip().upper()
        correct_answer = word.strip().upper()

        # If their typed answer perfectly matches the target word, SKIP this feedback screen
        if user_answer == correct_answer:
            continueRoutine = False
Flow
  Routine instructions
  Routine instructions2
  Routine prac_instructions
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = practice_retrieval.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('definition', 'A sweet red fruit with seeds'), ('word', 'APPLE'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A cold winter blanket'), ('word', 'SNOW'), ('old_new', 'new'), ('correct_old_new', 'no')]),
      OrderedDict([('definition', 'A wooden box with strings'), ('word', 'GUITAR'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A large vehicle for many people'), ('word', 'BUS'), ('old_new', 'new'), ('correct_old_new', 'no')]),
      OrderedDict([('definition', 'A yellow curved fruit'), ('word', 'BANANA'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A hot drink in a mug'), ('word', 'COFFEE'), ('old_new', 'new'), ('correct_old_new', 'no')])]
    Routine prac_cued_recall
    Routine prac_recall_fb
    Routine prac_recog
    Routine prac_source
    Routine prac_rem_know
  LoopTerminator prac_trials
  Routine main_exp_inst
  LoopInitiator trials_retrieval loopType="TrialHandler"
    conditionsFile = retrieval_24hr.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('definition', 'A glass shoe for science'), ('word', 'BEAKER'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A metal eyelid'), ('word', 'SHUTTER'), ('old_new', 'new'), ('correct_old_new', 'no')]),
      OrderedDict([('definition', 'A sky-writing goose'), ('word', 'AIRPLANE'), ('old_new', 'new'), ('correct_old_new', 'no')]),
      OrderedDict([('definition', 'A rock pillow'), ('word', 'BOULDER'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A metal birdcage for letters'), ('word', 'MAILBOX'), ('old_new', 'new'), ('correct_old_new', 'no')]),
      OrderedDict([('definition', 'A sleepy paintbrush'), ('word', 'MOP'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A tree skeleton'), ('word', 'BRANCH'), ('old_new', 'new'), ('correct_old_new', 'no')]),
      OrderedDict([('definition', 'A paper airplane graveyard'), ('word', 'TRASHCAN'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A metal butterfly'), ('word', 'CLIP'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A silent trumpet'), ('word', 'CONCH'), ('old_new', 'new'), ('correct_old_new', 'no')]),
      OrderedDict([('definition', 'A metal sunflower seed'), ('word', 'NUT'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A metal handshake'), ('word', 'CLAMP'), ('old_new', 'new'), ('correct_old_new', 'no')])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
    Routine cued_recall
    Routine recall_feedback
    Routine recognition
    Routine source_memory
    Routine rem_know
  LoopTerminator trials_retrieval
  Routine end
