PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': 'retrieval_30min'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = retrieval_30min
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine cued_recall
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    TextComponent recall_prompt
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $definition + "\n\nType the word below and press ENTER to submit."
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    CodeComponent clear_box
      Code Type = Py
      Begin Routine:
        # Force the textbox to be completely empty at the start of every trial
        typed_response.text = ''
    TextboxComponent typed_response
      bold = False
      borderColor = white
      editable = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    KeyboardComponent recall_submit
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine recognition
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    TextComponent recog_prompt
      letterHeight = 0.04
      startVal [time (s)] = 0.5
      text [set every repeat] = $definition + "\n\nDid you see or hear this definition earlier?\n\nPress 'Y' for YES\nPress 'N' for NO"
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    KeyboardComponent recog_key
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine source_memory
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    CodeComponent source_branching
      Code Type = Py
      Begin Routine:
        # If they pressed 'n' (No) during Recognition, skip this routine entirely
        if recog_key.keys == 'n':
            continueRoutine = False
    TextComponent source_prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text = Was this definition presented visually or auditorily?\n\nPress 'V' for VISUAL (Text on screen)\nPress 'A' for AUDITORY (Heard out loud)
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    KeyboardComponent source_key
      allowedKeys = 'v','a'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine rem_know
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    CodeComponent rk_branching
      Code Type = Py
      Begin Routine:
        # If they pressed 'n' (No) during Recognition, skip this routine entirely
        if recog_key.keys == 'n':
            continueRoutine = False
    TextComponent rk_prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        How do you remember this item?

        Press '1' for REMEMBER (I can re-experience specific details)
        Press '2' for KNOW (It is familiar, but I lack specific details)
        Press '3' for GUESS
    KeyboardComponent rk_response
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instructions
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    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this phase, your memory for the definitions you saw and heard earlier will be tested. Some definitions will be OLD (from earlier) and some will be NEW.
        For each definition, you will go through the following steps:
        1. Type the word that matches the definition and press ENTER.
        2. Indicate if the definition is OLD (Press Y) or NEW (Press N).
        If you say the item is OLD, you will also be asked:
        3. Was it presented Visually (Press V) or Auditorily (Press A)?
        . Do you 'Remember' specific details (Press 1), just 'Know' it's familiar (Press 2), or is it a 'Guess' (Press 3)?

        Press the SPACEBAR when you are ready to begin
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed this memory test.

        Thank you for your time and focus!

        Press the SPACEBAR to exit and save your data.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials_retrieval loopType="TrialHandler"
    conditionsFile = retrieval_30min.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('definition', 'A metal heartbeat'), ('word', 'ENGINE'), ('old_new', 'new'), ('correct_old_new', 'no')]),
      OrderedDict([('definition', 'A pocket sun'), ('word', 'FLASHLIGHT'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A metal ladder for water'), ('word', 'PIPELINE'), ('old_new', 'new'), ('correct_old_new', 'no')]),
      OrderedDict([('definition', 'A metal umbrella for wheels'), ('word', 'HUBCAP'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A sky anchor'), ('word', 'HELICOPTER'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A polite skeleton for tents'), ('word', 'POLE'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A house for wheels'), ('word', 'PARKINGLOT'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A flying door'), ('word', 'WINDOW'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A portable shadow'), ('word', 'HAT'), ('old_new', 'new'), ('correct_old_new', 'no')]),
      OrderedDict([('definition', 'A portable shadow box'), ('word', 'SUITCASE'), ('old_new', 'old'), ('correct_old_new', 'yes')]),
      OrderedDict([('definition', 'A wooden sandwich for books'), ('word', 'SHELF'), ('old_new', 'new'), ('correct_old_new', 'no')]),
      OrderedDict([('definition', 'A pocket waterfall for ink'), ('word', 'PEN'), ('old_new', 'new'), ('correct_old_new', 'no')])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
    Routine cued_recall
    Routine recognition
    Routine source_memory
    Routine rem_know
  LoopTerminator trials_retrieval
  Routine end
